PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = n-back-testing
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Routines
  Routine instructions
    TextComponent instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to press space if the white square appeared in the same location as the location on the last trial. For example if the square was in the left down corner on trial 1 and then it appeared in the same location on trial 2, press space. Otherwise, do not respond. Press space to continue.
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    KeyboardComponent keyResp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fix1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial1
    ImageComponent gridLines
      image = grid.png
      size = [0.6, 0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent tarSquare
      fillColor = $[1,1,1]
      pos [set every repeat] = [loc1,loc2]
      shape = rectangle
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent fix2
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent keyResp2
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine end
    TextComponent thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        This is the end of the experiment.
        Thank you for your time.
Flow
  Routine instructions
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = nBackTestingCond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', 'space')]),
      OrderedDict([('square', 2), ('loc1', 0.0), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 9), ('loc1', 0.2), ('loc2', -0.2), ('corrAns', 'space')]),
      OrderedDict([('square', 6), ('loc1', 0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 4), ('loc1', -0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', 'space')]),
      OrderedDict([('square', 8), ('loc1', 0.0), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 1), ('loc1', -0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 2), ('loc1', 0.0), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 4), ('loc1', -0.2), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 4), ('loc1', -0.2), ('loc2', 0.0), ('corrAns', 'space')]),
      OrderedDict([('square', 8), ('loc1', 0.0), ('loc2', -0.2), ('corrAns', None)]),
      OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', 0.0), ('corrAns', None)]),
      OrderedDict([('square', 5), ('loc1', 0.0), ('loc2', 0.0), ('corrAns', 'space')]),
      OrderedDict([('square', 1), ('loc1', -0.2), ('loc2', 0.2), ('corrAns', None)]),
      OrderedDict([('square', 3), ('loc1', 0.2), ('loc2', 0.2), ('corrAns', None)])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
    Routine trial1
  LoopTerminator trials
  Routine end
